# Generated by Configurator on Mon Dec 05 12:33:48 PST 2022

# Reset
Property,Core,Initialize,0

# Devices
Device,DHub,DemoCamera,DHub
Device,Camera,DemoCamera,DCam
Device,Camera2,DemoCamera,DCam
Device,YoMulti,Utilities,Multi Camera
Device,Dichroic,DemoCamera,DWheel
Device,Emission,DemoCamera,DWheel
Device,Excitation,DemoCamera,DWheel
Device,Objective,DemoCamera,DObjective
Device,Z,DemoCamera,DStage
Device,Path,DemoCamera,DLightPath
Device,XY,DemoCamera,DXYStage
Device,White Light Shutter,DemoCamera,DShutter
Device,Autofocus,DemoCamera,DAutoFocus
Device,LED,DemoCamera,DStateDevice
Device,LED Shutter,Utilities,State Device Shutter

# Pre-init settings for devices
Property,LED,Number of positions,10
Property,Camera,MaximumExposureMs,10000.0


# Pre-init settings for COM ports

# Hub (parent) references
Parent,Camera,DHub
Parent,Camera2,DHub
Parent,Dichroic,DHub
Parent,Emission,DHub
Parent,Excitation,DHub
Parent,Objective,DHub
Parent,Z,DHub
Parent,Path,DHub
Parent,XY,DHub
Parent,White Light Shutter,DHub
Parent,Autofocus,DHub
Parent,LED,DHub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,Z,0

# Roles
Property,Core,Camera,YoMulti
Property,Core,Shutter,White Light Shutter
Property,Core,Focus,Z
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Multi-camera configuration
Property,YoMulti,Physical Camera 1,Camera
Property,YoMulti,Physical Camera 2,Camera2

# Post-init camera settings
Property,Camera,BitDepth,16
Property,Camera2,BitDepth,16

# Labels
# Dichroic
Label,Dichroic,9,State-9
Label,Dichroic,8,State-8
Label,Dichroic,7,State-7
Label,Dichroic,6,State-6
Label,Dichroic,5,State-5
Label,Dichroic,4,State-4
Label,Dichroic,3,89402bs
Label,Dichroic,2,Q585LP
Label,Dichroic,1,Q505LP
Label,Dichroic,0,400DCLP
# Emission
Label,Emission,9,State-9
Label,Emission,8,State-8
Label,Emission,7,State-7
Label,Emission,6,State-6
Label,Emission,5,State-5
Label,Emission,4,89402m
Label,Emission,3,Chroma-HQ700
Label,Emission,2,Chroma-HQ535
Label,Emission,1,Chroma-D460
Label,Emission,0,Chroma-HQ620
# Excitation
Label,Excitation,9,Empty
Label,Excitation,8,State-8
Label,Excitation,7,State-7
Label,Excitation,6,State-6
Label,Excitation,5,State-5
Label,Excitation,4,State-4
Label,Excitation,3,Chroma-HQ620
Label,Excitation,2,Chroma-HQ570
Label,Excitation,1,Chroma-HQ480
Label,Excitation,0,Chroma-D360
# LED
Label,LED,9,State-9
Label,LED,8,State-8
Label,LED,7,State-7
Label,LED,6,State-6
Label,LED,5,State-5
Label,LED,4,635nm
Label,LED,3,550nm
Label,LED,2,470nm
Label,LED,1,385nm
Label,LED,0,Closed
# Objective
Label,Objective,5,Objective-5
Label,Objective,4,Objective-4
Label,Objective,3,Nikon 20X Plan Fluor ELWD
Label,Objective,2,Objective-2
Label,Objective,1,Nikon 10X S Fluor
Label,Objective,0,Nikon 40X Plan Fluor ELWD
# Path
Label,Path,2,State-2
Label,Path,1,State-1
Label,Path,0,State-0

# Configuration presets
# Group: Camera
# Preset: MedRes
ConfigGroup,Camera,MedRes,Camera,Binning,2
ConfigGroup,Camera,MedRes,Camera,BitDepth,10

# Preset: HighRes
ConfigGroup,Camera,HighRes,Camera,Binning,1
ConfigGroup,Camera,HighRes,Camera,BitDepth,12

# Preset: LowRes
ConfigGroup,Camera,LowRes,Camera,Binning,4
ConfigGroup,Camera,LowRes,Camera,BitDepth,8


# Group: Objective
# Preset: 20X
ConfigGroup,Objective,20X,Objective,State,3

# Preset: 40X
ConfigGroup,Objective,40X,Objective,State,0

# Preset: 10X
ConfigGroup,Objective,10X,Objective,State,1


# Group: Channel
# Preset: FITC
ConfigGroup,Channel,FITC,Dichroic,Label,Q505LP
ConfigGroup,Channel,FITC,Emission,Label,Chroma-HQ535
ConfigGroup,Channel,FITC,Excitation,Label,Chroma-HQ480
ConfigGroup,Channel,FITC,Core,Shutter,White Light Shutter

# Preset: Rhodamine
ConfigGroup,Channel,Rhodamine,Dichroic,Label,Q585LP
ConfigGroup,Channel,Rhodamine,Emission,Label,Chroma-HQ700
ConfigGroup,Channel,Rhodamine,Excitation,Label,Chroma-HQ570
ConfigGroup,Channel,Rhodamine,Core,Shutter,White Light Shutter

# Preset: DAPI
ConfigGroup,Channel,DAPI,Dichroic,Label,400DCLP
ConfigGroup,Channel,DAPI,Emission,Label,Chroma-HQ620
ConfigGroup,Channel,DAPI,Excitation,Label,Chroma-D360
ConfigGroup,Channel,DAPI,Core,Shutter,White Light Shutter

# Preset: Cy5
ConfigGroup,Channel,Cy5,Dichroic,Label,400DCLP
ConfigGroup,Channel,Cy5,Emission,Label,Chroma-HQ700
ConfigGroup,Channel,Cy5,Excitation,Label,Chroma-HQ570
ConfigGroup,Channel,Cy5,Core,Shutter,White Light Shutter

# Preset: Dual-GFP-Cy5
ConfigGroup,Channel,Dual-GFP-Cy5,Dichroic,Label,400DCLP
ConfigGroup,Channel,Dual-GFP-Cy5,Emission,Label,Chroma-HQ620
ConfigGroup,Channel,Dual-GFP-Cy5,Excitation,Label,Chroma-D360
ConfigGroup,Channel,Dual-GFP-Cy5,Core,Shutter,White Light Shutter

# Preset: 1
ConfigGroup,Channel,1,Dichroic,Label,400DCLP
ConfigGroup,Channel,1,Emission,Label,Chroma-HQ620
ConfigGroup,Channel,1,Excitation,Label,Chroma-D360
ConfigGroup,Channel,1,Core,Shutter,White Light Shutter

# Preset: 2
ConfigGroup,Channel,2,Dichroic,Label,400DCLP
ConfigGroup,Channel,2,Emission,Label,Chroma-HQ620
ConfigGroup,Channel,2,Excitation,Label,Chroma-D360
ConfigGroup,Channel,2,Core,Shutter,White Light Shutter

# Preset: 3
ConfigGroup,Channel,3,Dichroic,Label,400DCLP
ConfigGroup,Channel,3,Emission,Label,Chroma-HQ620
ConfigGroup,Channel,3,Excitation,Label,Chroma-D360
ConfigGroup,Channel,3,Core,Shutter,White Light Shutter

# Preset: 4
ConfigGroup,Channel,4,Dichroic,Label,400DCLP
ConfigGroup,Channel,4,Emission,Label,Chroma-HQ620
ConfigGroup,Channel,4,Excitation,Label,Chroma-D360
ConfigGroup,Channel,4,Core,Shutter,White Light Shutter

# Group: Channel-Multiband
# Preset: DAPI
ConfigGroup,Channel-Multiband,DAPI,Dichroic,Label,89402bs
ConfigGroup,Channel-Multiband,DAPI,Emission,Label,89402m
ConfigGroup,Channel-Multiband,DAPI,Excitation,Label,Empty
ConfigGroup,Channel-Multiband,DAPI,LED,Label,385nm
ConfigGroup,Channel-Multiband,DAPI,Core,Shutter,LED Shutter

# Preset: FITC
ConfigGroup,Channel-Multiband,FITC,Dichroic,Label,89402bs
ConfigGroup,Channel-Multiband,FITC,Emission,Label,89402m
ConfigGroup,Channel-Multiband,FITC,Excitation,Label,Empty
ConfigGroup,Channel-Multiband,FITC,LED,Label,470nm
ConfigGroup,Channel-Multiband,FITC,Core,Shutter,LED Shutter

# Preset: Rhodamine
ConfigGroup,Channel-Multiband,Rhodamine,Dichroic,Label,89402bs
ConfigGroup,Channel-Multiband,Rhodamine,Emission,Label,89402m
ConfigGroup,Channel-Multiband,Rhodamine,Excitation,Label,Empty
ConfigGroup,Channel-Multiband,Rhodamine,LED,Label,550nm
ConfigGroup,Channel-Multiband,Rhodamine,Core,Shutter,LED Shutter

# Preset: Cy5
ConfigGroup,Channel-Multiband,Cy5,Dichroic,Label,89402bs
ConfigGroup,Channel-Multiband,Cy5,Emission,Label,89402m
ConfigGroup,Channel-Multiband,Cy5,Excitation,Label,Empty
ConfigGroup,Channel-Multiband,Cy5,LED,Label,635nm
ConfigGroup,Channel-Multiband,Cy5,Core,Shutter,LED Shutter


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,Camera,BitDepth,16
ConfigGroup,System,Startup,Camera,ScanMode,1
ConfigGroup,System,Startup,Objective,Label,Nikon 10X S Fluor
ConfigGroup,System,Startup,Camera,Binning,1
ConfigGroup,System,Startup,LED Shutter,State Device,LED
ConfigGroup,System,Startup,Core,ChannelGroup,Channel

# Group: LightPath
# Preset: Camera1
ConfigGroup,LightPath,Camera1,Path,State,1

# Preset: Eyepiece
ConfigGroup,LightPath,Eyepiece,Path,State,0

# Preset: Camera2
ConfigGroup,LightPath,Camera2,Path,State,2


# Group: 2-Camera Mode
# Preset: 1-Single Camera
ConfigGroup,2-Camera Mode,1-Single Camera,YoMulti,Physical Camera 1,Camera
ConfigGroup,2-Camera Mode,1-Single Camera,YoMulti,Physical Camera 2,

# Preset: 2-Dual Camera
ConfigGroup,2-Camera Mode,2-Dual Camera,YoMulti,Physical Camera 1,Camera
ConfigGroup,2-Camera Mode,2-Dual Camera,YoMulti,Physical Camera 2,Camera2


# PixelSize settings
# Resolution preset: Res20x
ConfigPixelSize,Res20x,Objective,Label,Nikon 20X Plan Fluor ELWD
PixelSize_um,Res20x,0.5

# Resolution preset: Res40x
ConfigPixelSize,Res40x,Objective,Label,Nikon 40X Plan Fluor ELWD
PixelSize_um,Res40x,0.25

# Resolution preset: Res10x
ConfigPixelSize,Res10x,Objective,Label,Nikon 10X S Fluor
PixelSize_um,Res10x,1.0
